

//FILE_IO -----------------------------------------------------------------------------
chdir("hoc_code_library/file_manipulations")
{load_file("file__saveDataMatrix.hoc")}
{load_file("file__saveDataVector.hoc")}
{load_file("file__loadDataVector.hoc")}
chdir("../..")

//IO -----------------------------------------------------------------------------------
//{load_file("hoc_code_library/io__print_variable.hoc")}

//Extracellular Stim Simulation --------------------------------------------------------
chdir("hoc_code_library/extracellular_stim")
{load_file("xstim__define_global_variables.hoc")}
{load_file("xstim__create_stim_sectionlist.hoc")}
{load_file("xstim__create_node_sectionlist.hoc")}
{load_file("xstim__load_data.hoc")}
{load_file("xstim__setup_stim_playback.hoc")}
{load_file("xstim__run_stimulation2.hoc")}
{load_file("xstim__apply_stimulus.hoc")}
{load_file("xstim__continue_simulation.hoc")}
chdir("../..")

//Simulation Logging --------------------------------------------------------------
{load_file("hoc_code_library/sim_logging/sim_logging__record_node_voltages.hoc")}
